name: Color Picker - Mix Colors - Workflow

metadata:
  author: Tobias Ginsburg, Rafael Vescovi
  info: Main workflow for the RPL Color Picker
  version: 0.1

modules:
  - name: ot2_cp_gamma
  - name: pf400
  - name: camera_module

flowdef:
  # - name: Move from Camera Module to OT2
  #   module: pf400
  #   action: transfer
  #   args:
  #     source: camera_module.plate_station
  #     target: ot2_cp_gamma.deck2
  #     source_plate_rotation: narrow
  #     target_plate_rotation: wide
  #   comment: Place plate in ot2

  # - name: Mix all colors
  #   module: ot2_cp_gamma
  #   action: run_protocol
  #   args:
  #     color_A_volumes: payload.color_A_volumes
  #     color_B_volumes: payload.color_B_volumes
  #     color_C_volumes: payload.color_C_volumes
  #     color_D_volumes: payload.color_D_volumes
  #     destination_wells: payload.destination_wells
  #     use_existing_resources: payload.use_existing_resources
  #   files:
  #     protocol: payload.config_path
  #   comment: Mix colors A, B and C portions according to input data

  # - name: Move to Picture
  #   module: pf400
  #   action: transfer
  #   args:
  #     source: ot2_cp_gamma.deck2
  #     target: camera_module.plate_station
  #     source_plate_rotation: wide
  #     target_plate_rotation: narrow

  - name: Take Picture
    module: camera_module
    action: take_picture
    args:
      save_location: local_run_results
      file_name: "final_image.jpg"
