name: Color Picker - New Plate - Workflow

metadata:
  author: Tobias Ginsburg, Rafael Vescovi
  info: New Plate workflow for the RPL Color Picker
  version: 0.1


modules:
  - name: sciclops
  - name: pf400

flowdef:
  - name: Color Plate to Plate Exchange
    module: sciclops
    action: get_plate
    args:
      pos: "tower1"
      target: sciclops.exchange
    comments: Move initial color plate from sciclops to plate exchange

  - name: Move to final location
    module: pf400
    action: transfer
    args:
      source: sciclops.exchange
      target: camera_module.plate_station
      source_plate_rotation: narrow
      target_plate_rotation: narrow
      