name: PCR - Workflow

metadata:
  author: RPL Team
  info: Initial PCR workflow for RPL workcell
  version: 0.1

# This is a list of modules used in the workflow
modules:
  - name: ot2_pcr_alpha
  - name: pf400
  - name: peeler
  - name: sealer
    #  - name: biometra
  - name: sciclops
  - name: camera_module

#This is a list of steps in the workflow
#each step represents an action on a single module
flowdef:
  #This is a human legible name for the ste
  - name: Sciclops gets plate from stacks
    #This defines which module the action will run on
    module: sciclops
    # This tells the module which action in its library to run
    action: get_plate
    #These arguments specify the parameters for the action above
    args:
      pos: "tower2"
      target: sciclops.exchange
    # This is a place for additional notes
    comment: Stage PCR plates

  - name: pf400 moves plate from sciclops to ot2
    module: pf400
    action: transfer
    args:
      source:  sciclops.exchange
      target:  ot2_pcr_alpha.deck1_cooler
      source_plate_rotation: narrow
      target_plate_rotation: wide

  - name: ot2 runs the "Mix reactions" protocol
    module: ot2_pcr_alpha
    action: run_protocol
    args:
      config_path: /home/luckierdodge/AD-SDL/rpl_workcell/pcr_app/protocol_files/PCR_prep_full_plate.yaml
      use_existing_resources: False

  - name: pf400 moves plate from ot2 to sealer
    module: pf400
    action: transfer
    args:
      source: ot2_pcr_alpha.deck1_cooler
      target: sealer.default
      source_plate_rotation: wide
      target_plate_rotation: narrow

  - name: Seal plate in sealer
    module: sealer
    action: seal
    args:
      time: payload:seal.time
      temperature: 175

  - name: pf400 moves plate from sealer to biometra
    module: pf400
    action: transfer
    args:
      source: sealer.default
      target: biometra.default
      source_plate_rotation: narrow
      target_plate_rotation: wide

        #  - name: Close lid of biometra
        #    module: biometra
        #    action: close_lid
        #
        #  - name: Run biometra program
        #    module: biometra
        #    action: run_program
        #    args:
        #        program_n: 3
        #
        #  - name: Open lid of biometra
        #    module: biometra
        #    action: open_lid

  - name: pf400 moves plate from biometra to peeler
    module: pf400
    action: transfer
    args:
      source: biometra.default
      target: peeler.default
      source_plate_rotation: wide
      target_plate_rotation: narrow

  - name: Peel plate
    module: peeler
    action: peel

  - name: pf400 moves plate from peeler to camera
    module: pf400
    action: transfer
    args:
      source: peeler.default
      target: camera_module.plate_station
      source_plate_rotation: narrow
      target_plate_rotation: narrow

  - name: camera takes picture of plate
    module: camera_module
    action: take_picture
    args:
      file_name: "final_image.jpg"

  - name: pf400 moves plate to final location
    module: pf400
    action: transfer
    args:
      source: camera_module.plate_station
      target: wc.trash
      source_plate_rotation: narrow
      target_plate_rotation: narrow

