metadata:
  name: Platecrane - Workflow
  author: Doga Ozgulbas
  info: Platecrane movements
  version: 0.1

workcell: /home/rpl/workspace/rpl_workcell/bio_workcell/bio_workcell.yaml

modules:
  - name: plateCrane

flowdef:
  - name: Move plate from Stack5 to Solo Position4
    module: plateCrane
    command: transfer
    args:
      source: "Stack5"
      target: "Solo.Position4"
      source_type: "stack"
      target_type: "module"
    checks: null
    comment: Place plate in Solo Position4

  - name: Move plate from Solo Position4 to Hidex Nest
    module: plateCrane
    command: transfer
    args:
      source: "Solo.Position4"
      target: "Hidex.Nest"
      source_type: "module"
      target_type: "module"      
      height_offset: "360"
    checks: null
    comment: Place plate to Hidex Nest

  - name: Move plate from HidexNest to Sealer
    module: plateCrane
    command: transfer
    args:
      source: "Hidex.Nest"
      target: "SealerNest"
      source_type: "module"
      target_type: "module"  
      height_offset: "360"
    checks: null
    comment: Place plate to Sealer

  - name: Move plate from Sealer to Liconic
    module: plateCrane
    command: transfer
    args:
      source: "SealerNest"
      target: "Liconic.Nest"
      source_type: "module"
      target_type: "stack"   
    checks: null
    comment: Place plate onto Liconic

  - name: Move plate from Liconic to Peeler
    module: plateCrane
    command: transfer
    args:
      source: "Liconic.Nest"
      target: "PeelerNest"
      source_type: "stack"
      target_type: "module"   
    checks: null
    comment: Place plate onto PeelerNest
  
  - name: Move plate from PeelerNest to HidexNest
    module: plateCrane
    command: transfer
    args:
      source: "PeelerNest"
      target: "Hidex.Nest"
      source_type: "module"
      target_type: "module"  
      height_offset: "360"
    checks: null
    comment: Place plate in Hidex Nest
  
  - name: Move plate from HidexNest to Stack1
    module: plateCrane
    command: transfer
    args:
      source: "Hidex.Nest"
      target: "Stack1"
      source_type: "module"
      target_type: "stack"   
      height_offset: "360"
    checks: null
    comment: Place plate into trash stack
