# TODO: add input vars to the ot2 command (csv col)

metadata:
  name: PCR - Workflow
  author: Casey Stone, Rafael Vescovi
  info: Initial PCR workflow for RPL workcell
  version: 0.1

workcell: /home/rpl/workspace/rpl_workcell/pcr_workcell/pcr_workcell.yaml

modules:
  - name: ot2_cp_gamma
  - name: pf400
  - name: camera

flowdef:
  # - name: Move from Sciclops to OT2
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: camera_module.positions.plate_station
  #     target: ot2_cp_gamma.positions.deck2
  #     source_plate_rotation: narrow
  #     target_plate_rotation: wide
  #   comment: Place plate in ot2

  # - name: Mix all colors
  #   module: ot2_cp_gamma
  #   command: run_protocol
  #   args:
  #     # Currently needs to be hardcoded absolution paths... need to get relative paths configured
  #     config_path:  /home/rpl/workspace/rpl_workcell/color_picker/protocol_files/combined_protocol.yaml
  #     red_volumes: payload.red_volumes
  #     green_volumes: payload.green_volumes
  #     blue_volumes: payload.blue_volumes
  #     destination_wells: payload.destination_wells
  #     use_existing_resources: payload.use_existing_resources
  #   comment: Mix the red portions according to input data

  # - name: Move to Picture
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: ot2_cp_gamma.positions.deck2
  #     target: camera_module.positions.plate_station
  #     source_plate_rotation: wide
  #     target_plate_rotation: narrow

  - name: Take Picture
    module: camera_module
    command: take_picture
    args:
      save_location: local_run_results
      file_name: "final_image.jpg"


