name: Color Picker - Trash Plate - Workflow

metadata:
  author: Tobias Ginsburg, Rafael Vescovi
  info: Plate removal workflow for the RPL Color Picker
  version: 0.1

modules:
  - name: pf400

modules:
  - name: pf400
  - name: barty

flowdef:
  - name: Move to final location
    module: pf400
    action: transfer
    args:
      source: camera_module.plate_station
      target: wc.trash
      source_plate_rotation: narrow
      target_plate_rotation: narrow
  # - name: Drain Max Ink
  #   module: barty
  #   action: drain_ink_all_motors
  #   args:
  #    foo: bar
  #   comments: Drain OT2 of max vol of ink.
