metadata:
  name: Exploration Workflow Test
  author: Doga Ozgubas, Rafael Vescov
  info: Initial workflow for workcell validation
  version: 0.1

workcell: /home/rpl/workspace/rpl_workcell/pcr_workcell/pcr_workcell.yaml

modules:
  - name: ur5

flowdef:
  - name: Explore modules
    module: ur5
    command: transfer
    args: 
      pos1: [-0.1828537989205587, 0.7914917511283945, 0.390542100409092, -0.014571172649734884, -3.133719848650817, -0.010138239501312422]
      pos2: [-0.1828537989205587, 0.7914917511283945, 0.390542100409092, -0.014571172649734884, -3.133719848650817, -0.010138239501312422]
