metadata:
  name: example workflow
  author: Author
  info: extended info
  version: 0.1

workcell: ../pcr_workcell.yaml

modules:
  - name: pf400

flowdef:
  - name: Sciclops to OT2
    module: pf400
    command: transfer
    args:
      source: [262.550, 20.608, 119.290, 662.570, 0.0, 574.367]
      target: [197.185, 59.736, 90.509, 566.953, 82.069, -65.550]
      source_plate_rotation: narrow
      target_plate_rotation: wide
    checks: null
    comment: Place plate in ot2

  - name: OT2 to sealer
    module: pf400
    command: transfer
    args:
      source: [197.185, 59.736, 90.509, 566.953, 82.069, -65.550]
      target: [240.788, -27.154, 313.011, 342.317, 0.0, 683.702]
      source_plate_rotation: wide
      target_plate_rotation: narrow
    checks: null
    comment: null

  # - name: Sealer to peeler
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: [240.788, -27.154, 313.011, 342.317, 0.0, 683.702]
  #     target: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
  #     source_plate_rotation: narrow
  #     target_plate_rotation: narrow
  #   checks: null
  #   comment: null

#  - name: Move from sealer to Thermocycler
#     module: pf400
#     command: transfer
#     args:
#       source: [240.788, -27.154, 313.011, 342.317, 0.0, 683.702]
#       target: [280.0, 40.849, 75.130, 598.739, 79.208, -916.456] 
#       source_plate_rotation: narrow
#       target_plate_rotation: wide
#     checks: null
#     comment: null

  - name: Move from sealer to Thermocycler
    module: pf400
    command: transfer
    args:
      source: [240.788, -27.154, 313.011, 342.317, 0.0, 683.702]
      target: [280.0, 4.271, 95.676, 706.535, 126, -916.454]  
      source_plate_rotation: narrow
      target_plate_rotation: wide
    checks: null
    comment: null

  # - name: Move from Thermocycler to peeler
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: [278.948, 40.849, 75.130, 598.739, 79.208, -916.456] 
  #     target: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
  #     source_plate_rotation: wide
  #     target_plate_rotation: narrow
  #   checks: null
  #   comment: null

  - name: Move from Thermocycler to peeler
    module: pf400
    command: transfer
    args:
      source: [280.0, 4.271, 95.676, 706.535, 126, -916.454] 
      target: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
      source_plate_rotation: wide
      target_plate_rotation: narrow
    checks: null
    comment: null

  - name: Pealer to Sciclops
    module: pf400
    command: transfer
    args:
      source: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
      target: [262.550, 20.608, 119.290, 662.570, 0.0, 574.367]
      source_plate_rotation: narrow
      target_plate_rotation: narrow
    checks: null
    comments: null
