metadata:
  name: PCR - Workflow
  author: Casey Stone, Rafael Vescovi
  info: Initial PCR workflow for RPL workcell
  version: 0.1

workcell: /home/rpl/wei_ws/demo/rpl_workcell/pcr_workcell/pcr_workcell.yaml

modules:
  - name: ot2_pcr_alpha
  - name: pf400
  - name: peeler
  - name: sealer
  - name: biometra
  - name: sciclops

flowdef:
  # - name: PCR Plate Exchange
  #   module: sciclops
  #   command: get_plate
  #   args:
  #     pos: "tower1"
  #   checks: null
  #   comment: Stage pcr plates

  # - name: Move from Sciclops to OT2
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: sciclops.positions.exchange
  #     target: ot2_pcr_alpha.positions.deck2
  #     source_plate_rotation: narrow
  #     target_plate_rotation: wide
  #   checks: null
  #   comment: Place plate in ot2


  # - name: Mix OT2 reactions
  #   module: ot2_pcr_alpha
  #   command: run_protocol
  #   args:
  #     # Currently needs to be hardcoded absolution paths... need to get relative paths configured
  #     config_path: /home/wei_ws/demo/rpl_workcell/pcr_workcell/protocol_files/ot2_pcr_config.yaml
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # - name: Move from OT2 to sealer
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: ot2_pcr_alpha.positions.deck2
  #     target: sealer.positions.default
  #     source_plate_rotation: wide
  #     target_plate_rotation: narrow
  #   checks: null
  #   comment: null

  # - name: Seal PCR plate
  #   module: sealer
  #   command: seal
  #   args:
  #     time: 3
  #     temperature: 175
  #   checks: null
  #   comment: null


  # - name: Move from sealer to Thermocycler
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: sealer.positions.default
  #     target: biometra.positions.default
  #     source_plate_rotation: narrow
  #     target_plate_rotation: narrow
  #   checks: null
  #   comment: null

  - name: Thermocycle
    module: biometra  
    command: open_lid
    args: {}
    checks: null

  # - name: Move from sealer to Thermocycler
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: [238.788, -27.154, 313.011, 342.317, 0.0, 683.702]
  #     target: [279.948, 40.849, 75.130, 598.739, 79.208, -916.456] 
  #     source_plate_rotation: narrow
  #     target_plate_rotation: narrow
  #   checks: null
  #   comment: null

  # - name: Move from Therm5ocycler to peeler
  #   module: pf400
  #   command: transfer
  #   args:
  #     target: biometra.positions.default
  #     source: peeler.positions.default
  #     source_plate_rotation: narrow
  #     target_plate_rotation: narrow
  #   checks: null
  #   comment: null

  # - name: Move from Therm5ocycler to peeler
  #   module: pf400
  #   command: transfer
  #   args:
  #     target: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621] 
  #     source: [279.948, 40.849, 75.130, 598.739, 79.208, -916.456] 
  #     source_plate_rotation: narrow
  #     target_plate_rotation: narrow
  #   checks: null
  #   comment: null

  # - name: Peal
  #   module: peeler
  #   command: peel
  #   args: {}
  #   checks: null
  #   comment: null

  # - name: Move from pealer to final destination
  #   module: pf400
  #   command: transfer
  #   args:
  #     source: peeler.positions.default
  #     target: sciclops.positions.exchange
  #     source_plate_rotation: narrow
  #     target_plate_rotation: narrow
  #   checks: null
  #   comments: null