metadata:
  name: example workflow
  author: Author
  info: extended info
  version: 0.1

workcell: ../pcr_workcell.yaml

modules:
  - name: pf400
  - name: sciclops
  - name: sealer
  - name: pealer
  - name: ot2             ## correct?

flowdef:
  - name: PCR Plate Exchange
    module: sciclops
    command: get_plate
    args:
      pos: "tower1"
    checks: null
    comment: Stage pcr plates

  - name: PCR to OT2
    module: pf400
    command: transfer
    args:
      pos1: [262.550, 20.608, 119.290, 662.570, 0.0, 574.367]
      pos2: [195.99, 60.21, 92.13, 565.41, 82.24, -65.25]
    checks: null
    comment: Place plate in ot2

  - name: Mix OT2 reactions
    module: ot2
    command: execute
    args:
      config: "{'equipment': [{'name': 'corning_96_wellplate_360ul_flat', 'location': '2', 'alias': 'source'}, {'name': 'corning_96_wellplate_360ul_flat', 'location': '3', 'alias': 'dest'}, {'name': 'opentrons_96_tiprack_300ul', 'location': '8'}, {'name': 'p300_multi_gen2', 'mount': 'right'}], 'commands': [{'name': 'example command', 'source': 'source:A1', 'destination': 'dest:A1', 'volume': 100}, {'name': 'other command', 'source': 'source:A2', 'destination': 'dest:A2', 'volume': 100}], 'metadata': {'protocolName': 'Example Name', 'author': 'Kyle khippe@anl.gov', 'description': 'some detailed description', 'apiLevel': '2.12'}}"
    checks: null
    comment: Executes sequences of picking up pipettes, aspirating and dispensing substrates, and dropping off pipettes


  - name: Move plate to sealer
    module: pf400
    command: transfer
    args:
      pos1: [195.99, 60.21, 92.13, 565.41, 82.24, -65.25]
      pos2: [231.788, -27.154, 313.011, 342.317, 20.0, 683.702]
      # target: sealer
      # source: sciclops_exchange
    checks: null
    comment: null

  - name: Seal PCR plate
    module: sealer
    command: seal
    args:
      time: 3
      temp: 175
    checks: null

  # - name: Thermocycle
  #   module: biometra
  #   command: thermocycle
  #   args:
  #     protocol_file: pcr_workcell/protocol_files/biometra_protocol.yaml
  #   checks: null
  #   comment: null

  - name: Move to peeler
    module: pf400
    command: transfer
    args:
      pos1: [231.788, -27.154, 313.011, 342.317, 0.0, 683.702]
      pos2: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
    checks: null
    comment: null

  - name: Peel
    module: peeler
    command: peel
    args: {}
    checks: null
    comment: null

  - name: Move to final destination
    module: pf400
    command: transfer
    args:
      pos1: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
      pos2: [262.550, 20.608, 119.290, 662.570, 0.0, 574.367]
    checks: null
    comments: null
